PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = height
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  expName = V2_Behavioral_FaceExperiment
  Screen = 1
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Routines
  Routine EndScreen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = End of experiment.
      stopVal [duration (s)] = 20
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  Routine practice_timingfeedback
    CodeComponent feedback_after
      Code Type = Py
      Begin Experiment:
        #msg='blank message'#if this shows on the screen, we forgot to update the msg!
      Begin Routine:
        if not practice_good_or_bad_response.keys and not practice_good_or_bad_response_early.keys  :
            msg="Too slow!"

        else:
            msg=""
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      stopVal [duration (s)] = 2.0
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  Routine facetrial
    ImageComponent faceimage
      image [set every repeat] = $ImageFile
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
      stopVal [duration (s)] = 0.5
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    KeyboardComponent good_or_bad_response_early
      stopVal [duration (s)] = 0.5
      forceEndRoutine = False
      allowedKeys = '1','0'
      startVal [time (s)] = 0.0
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    CodeComponent code
      End Routine:
        for thisComponent in facetrialComponents:
                    if hasattr(thisComponent, "setAutoDraw"):
                        thisComponent.setAutoDraw(False)
                # check responses
                    if good_or_bad_response_early.keys in ['', [], None]:  # No response was made
                        good_or_bad_response_early.keys=None
                        good_or_bad_response_early.rt=None
                        facetrials.addData('good_or_bad_response_early.rt', good_or_bad_response_early.rt)
                    facetrials.addData('good_or_bad_response_early.keys',good_or_bad_response_early.keys)
                    if good_or_bad_response_early.keys != None:  # we had a response
                        facetrials.addData('good_or_bad_response_early.rt', good_or_bad_response_early.rt)
  Routine Instructions_4
    TextComponent afterpractice_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are done with the practice.

        You will not get feedback on whether you responded quickly enough during the actual task.

        Press the spacebar when you are ready to begin.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Instructions_2
    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If you think the person FEELS BAD, press '1'.

        If you think the person FEELS GOOD, press '0'.
    KeyboardComponent spacebar_instructions_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Instructions_3
    TextComponent instructions_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Make your response quickly, as soon as you see 'FEELS BAD' and 'FEELS GOOD' on the screen.

        You will have 1 second to make your response.

        Press the spacebar to begin a practice round.
    KeyboardComponent spacebar_instructions_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine ISI
  Routine ISI_2
    TextComponent ISI_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
      stopVal [duration (s)] = 0.2
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  Routine practicetrial_2
  Routine ISI_NoResponse
    TextComponent ISI_NoResponse_Fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
      stopVal [duration (s)] = 10.0
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  Routine practiceresponse
    ImageComponent good_or_bad_rating_practice
      image = Stimuli/bad_or_good.jpg
      startVal [time (s)] = 0.0
      size = (1.5,1.0)
      stopVal [duration (s)] = 1.5
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    KeyboardComponent practice_good_or_bad_response
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','0'
      startVal [time (s)] = 0.0
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  Routine practicetrial
    ImageComponent practiceimage
      image [set every repeat] = $PracticeImageFile
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
      stopVal [duration (s)] = 1.0
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    KeyboardComponent practice_good_or_bad_response_early
      stopVal [duration (s)] = 1.0
      forceEndRoutine = False
      allowedKeys = '1','0'
      startVal [time (s)] = 0.0
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  Routine response
    ImageComponent bad_or_good_rating
      image = Stimuli/bad_or_good.jpg
      startVal [time (s)] = 0.0
      size = (1.5,1.0)
      stopVal [duration (s)] = 1.5
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    KeyboardComponent good_or_bad_response
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','0'
      startVal [time (s)] = 0.0
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  Routine practicetrial_3
  Routine WelcomeScreen
    TextComponent textwelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be looking at faces.

        Press the spacebar to continue.
    KeyboardComponent wait_for_spacebar
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent instructions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After each face, you will indicate whether the person in the picture FEELS BAD or FEELS GOOD.
    KeyboardComponent space_instructions_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine Instructions
  Routine Instructions_2
  Routine Instructions_3
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = PracticeTrials.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'PracticeImageFile': u'Stimuli/practice_image1.jpg'},
      {'PracticeImageFile': u'Stimuli/practice_image2.jpg'},
      {'PracticeImageFile': u'Stimuli/practice_image3.jpg'},
      {'PracticeImageFile': u'Stimuli/practice_image4.jpg'},
      {'PracticeImageFile': u'Stimuli/practice_image5.jpg'},
      {'PracticeImageFile': u'Stimuli/practice_image6.jpg'}]
    Routine practicetrial
    Routine practiceresponse
    Routine practice_timingfeedback
    Routine ISI_2
  LoopTerminator practice
  Routine Instructions_4
  LoopInitiator ChooseBlock loopType="TrialHandler"
    conditionsFile = BlockFileList.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'BlockFileName': u'Block1.csv'},
      {'BlockFileName': u'Block2.csv'},
      {'BlockFileName': u'Block3.csv'},
      {'BlockFileName': u'Block4.csv'},
      {'BlockFileName': u'Block5.csv'},
      {'BlockFileName': u'Block6.csv'},
      {'BlockFileName': u'Block7.csv'},
      {'BlockFileName': u'Block8.csv'},
      {'BlockFileName': u'Block9.csv'},
      {'BlockFileName': u'Block10.csv'}]
    Routine ISI_NoResponse
    LoopInitiator facetrials loopType="TrialHandler"
      conditionsFile = $BlockFileName
      loopType = random
      nReps = 1
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      Routine facetrial
      Routine response
      Routine ISI_2
    LoopTerminator facetrials
  LoopTerminator ChooseBlock
  Routine ISI_NoResponse
  Routine EndScreen
