PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = RunA_MRI_FaceExperiment
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Routines
  Routine EndScreen
    TextComponent EndBlock_TenSecondScreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = End of block.
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  Routine facetrial
    CodeComponent save_onsets
      Code Type = Py
      Begin Routine:
        trialstarttime = facetrialClock.getTime()
        facetrials.addData('WithinTrial_FaceStart',trialstarttime)


        global_onset = globalClock.getTime()
        thisExp.addData('Global_FaceStart', global_onset)

        #thisExp.nextEntry()
      End Routine:
        trialendtime = facetrialClock.getTime()
        facetrials.addData('WithinTrial_FaceEnd',trialendtime)

        global_offset = globalClock.getTime()
        thisExp.addData('Global_FaceEnd', global_offset)

        #thisExp.nextEntry()
    ImageComponent faceimage
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent ghost_response
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine wait_for_trigger_2
    TextComponent wait_for_trigger_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Get ready!
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    KeyboardComponent key_resp_2
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent waitfortrigger_onset
      Code Type = Py
      Begin Experiment:
        from psychopy import core
        globalClock = core.Clock()
      Begin Routine:
        onset_triggerwait = globalClock.getTime()
        thisExp.addData('WaitforTrigger_GlobalStartTime',onset_triggerwait)

        thisExp.nextEntry()
      End Routine:
        triggerreceived = globalClock.getTime()
        thisExp.addData('GlobalTime_TriggerReceived',triggerreceived)

        thisExp.nextEntry()
  Routine hwg
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Here we go!
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        onsetHWG = globalClock.getTime()
        thisExp.addData('hwgOnset', onsetHWG)

        thisExp.nextEntry()
  Routine FixationJitter
    CodeComponent save_jitter_onset
      Code Type = Py
      Begin Routine:
        jitter_trialstarttime = FixationJitterClock.getTime()
        facetrials.addData('WithinTrial_FixationStart',jitter_trialstarttime)

        global_jitter_onset = globalClock.getTime()
        thisExp.addData('Global_FixationStart', global_jitter_onset)

        #thisExp.nextEntry()
      End Routine:
        jitter_trialendtime = FixationJitterClock.getTime()
        facetrials.addData('WithinTrial_FixationEnd',jitter_trialendtime)

        global_jitter_offset = globalClock.getTime()
        thisExp.addData('Global_FixationEnd', global_jitter_offset)

        #thisExp.nextEntry()
    TextComponent ISI_Fixation_Jitter
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    KeyboardComponent ghost_response_fixation
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ISI
    TextComponent ISI_fixation_OneSecond
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        onset_ISItime = globalClock.getTime()
        thisExp.addData('FirstISI_GlobalStart',onset_ISItime)

        #thisExp.nextEntry()
  Routine Initialize
    CodeComponent initialize_randomization
      Code Type = Py
      Begin Experiment:
        # In this script I use a csv file to define my variables as opposed to explicity defining them in my code.
        # I then use the participant's number and the session number to create personalized order files, in case that would be helpful

        import csv
        import random

        with open("RunA_Jitter.csv") as f:
            reader = csv.DictReader(f)
            jitters = [row["ISI_duration"] for row in reader]

        participant_id = expInfo["participant"]
        session_id = expInfo["session"]

        random.shuffle(jitters)

        # get image names and expressions
        condition_input_file = "RunA_ConditionsInputFile.csv"
        with open(condition_input_file) as f:
            reader = csv.DictReader(f)
            input_rows = [row["ImageFile"] for row in reader]

        output_rows = [(input_row, jitter) for input_row, jitter in zip(input_rows, jitters)]

        # write image names, expressions, and jitters
        condition_output_file = "RunA_ConditionsFile.csv"
        with open(condition_output_file, "w") as f:
            writer = csv.DictWriter(f, ["ImageFile", "jitter"])
            writer.writeheader()
            writer.writerows([{"ImageFile": output_row[0], "jitter": output_row[1]} for output_row in output_rows])
  Routine WelcomeScreen
    TextComponent textwelcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be looking at faces.

        Remember to stay still for the duration of the scan.
    KeyboardComponent wait_for_trigger
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Initialize
  Routine wait_for_trigger_2
  Routine ISI
  LoopInitiator facetrials loopType="TrialHandler"
    conditionsFile = RunA_ConditionsFile.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile': 'Stimuli/BF16_AO.jpg', 'jitter': 7.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/AF03_AO.jpg', 'jitter': 1.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/BF15_AO.jpg', 'jitter': 3.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/WF01_AO.jpg', 'jitter': 4.0, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/AF07_AO.jpg', 'jitter': 1.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/AF06_AO.jpg', 'jitter': 5.0, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/HF04_AO.jpg', 'jitter': 1.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/AF08_AO.jpg', 'jitter': 1.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/AM02_AO.jpg', 'jitter': 1.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/AM03_AO.jpg', 'jitter': 3.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/HM11_AO.jpg', 'jitter': 1.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/AM11_AO.jpg', 'jitter': 2.0, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/HM09_AO.jpg', 'jitter': 6.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/BM03_AO.jpg', 'jitter': 2.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/BM18_AO.jpg', 'jitter': 5.0, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/BM04_AO.jpg', 'jitter': 1.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/WM05_AO.jpg', 'jitter': 7.5, 'Expression': 'Angry'},
      {'ImageFile': 'Stimuli/BF01_HO.jpg', 'jitter': 1.5, 'Expression': 'Happy'},
      {'ImageFile': 'Stimuli/AF01_HO.jpg', 'jitter': 1.5, 'Expression': 'Happy'},
      {'ImageFile': 'Stimuli/HF05_HO.jpg', 'jitter': 3.5, 'Expression': 'Happy'}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
    Routine facetrial
    Routine FixationJitter
  LoopTerminator facetrials
  Routine ISI
  Routine EndScreen
